# L(r,r) bound to R and S, or to two R. The pattern L(r!1,r!2).R(l!1).S(l!2)
# applies only where the other r holds an S. One-way unbinding of R:
#   L.R.S: dG = -(G_LR + G_RS) = 3 -> exp(-(0.2+0.35*3)) = 0.2865
#   L.R.R: dG = -G_LR = 2 -> exp(-0.9) = 0.4066 per R, 0.813 for the pair
begin model
begin parameters
  Ea0 0.2
  phi 0.35
  G_LR -2
  G_RS -1
end parameters
begin molecule types
  L(r,r)
  R(l)
  S(l)
end molecule types
begin seed species
  L(r!1,r!2).R(l!1).S(l!2) 1000
  L(r!1,r!2).R(l!1).R(l!2) 1000
end seed species
begin energy patterns
  L(r!1).R(l!1) G_LR
  L(r!1,r!2).R(l!1).S(l!2) G_RS
end energy patterns
begin observables
  Species LRS L(r!1,r!2).R(l!1).S(l!2)
  Species LRR L(r!1,r!2).R(l!1).R(l!2)
end observables
begin reaction rules
  L(r!1).R(l!1) -> L(r) + R(l) Arrhenius(phi,Ea0)
end reaction rules
end model
generate_network({overwrite=>1})
writeXML()
